PsychoPy2experiment version="1.73.05"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Experiment info = {'participant':'s_001', 'ori':10}
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine test
    PatchComponent patch
      stopVal [duration (s)] = 2.0
      sf = None
      units = pix
      phase = $trialClock.getTime()*2
      ori [set every repeat] = [0]
      startVal [time (s)] = 0.0
      image [set every repeat] = sqr
      size = [800, 600]
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Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine test
  LoopTerminator trials_2
